PsychoPy2experiment version="1.80.06"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = simple_imagined_movement
  Units = use prefs
  Screen = 1
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Routines
  Routine pause
    TextComponent text_2
      text = Pause
      stopVal [duration (s)] = 5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine feedback
    TextComponent text_5
      text [set every repeat] = "Feedback " + $feedback
      stopVal [duration (s)] = 2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine stimulus
    StaticComponent ISI_2
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    TextComponent imagination_instruction_2
      stopVal [duration (s)] = 4
      text [set every repeat] = $instruction
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine feedbackInstructions
    TextComponent text_4
      stopVal [duration (s)] = 3600
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Simple Imagined Movement Experiment

        During the trails imagine yourself vigerously shaking the indicated body part (left hand, right hand, left foot or right foot). After each trail the system's classification of the brain signals will be shown.

        Press <space> to continue.
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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  Routine trailStart
    TextComponent text
      stopVal [duration (s)] = 2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text [set every repeat]:
        $trailText
  Routine Instructions
    TextComponent text_3
      stopVal [duration (s)] = 3600
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Simple Imagined Movement Experiment

        During the trails imagine yourself vigerously shaking the indicated body part (left hand, right hand, left foot or right foot).

        Press <space> to continue.
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trails.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [{'trailText': u' Trail 1', 'trail': 1},
      {'trailText': u' Trail 2', 'trail': 2},
      {'trailText': u' Trail 3', 'trail': 3},
      {'trailText': u' Trail 4', 'trail': 4},
      {'trailText': u' Trail 5', 'trail': 5}]
    Routine trailStart
    LoopInitiator stimuli loopType="TrialHandler"
      conditionsFile = stimulus_conditions.csv
      loopType = random
      nReps = 1
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      conditions:
        [{'bodyPart': u'left_hand', 'instruction': u' Left hand.'},
        {'bodyPart': u'right_hand', 'instruction': u' Right hand.'},
        {'bodyPart': u'left_foot', 'instruction': u' Left foot.'},
        {'bodyPart': u'right_foot', 'instruction': u' Right foot.'}]
      Routine stimulus
    LoopTerminator stimuli
    Routine pause
  LoopTerminator trials
  Routine feedbackInstructions
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = stimulus_conditions.csv
    loopType = random
    nReps = 1
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    conditions:
      [{'bodyPart': u'left_hand', 'instruction': u' Left Hand'},
      {'bodyPart': u'right_hand', 'instruction': u' Right Hand'},
      {'bodyPart': u'left_foot', 'instruction': u' Left Foot'},
      {'bodyPart': u'right_foot', 'instruction': u' Right Foot'}]
    Routine stimulus
    Routine feedback
  LoopTerminator trials_2
